<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>T</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>22463269</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>