<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>T</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Box1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="SerialNumber" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>20104308</spk:SerialNumber>
                <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>BayerBG2BgrVng</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>debug_timestamp/cam0_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>true</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Box2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="SerialNumber" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>20181897</spk:SerialNumber>
                <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>BayerBG2BgrVng</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe2</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>debug_timestamp/cam1_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>true</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>